PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = ResearchProposal_1
  keyboardBackend = ioHub
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Routines
  Routine Encoding
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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  Routine Break
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    TextComponent Instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text = This is a break for 2 minutes. 
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  Routine Instruction_2
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    TextComponent retrival_instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will be presented with words expressing different emotions or neutral words.
        Your task will be to indicate, if you can remember having seen them,
        press Y for yes and N for no.

        Press "Spacebar" to continue
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instruction_1
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In the next frame some word and image association will be displayed.

        Try to memorize as many pairs of words and images as possible.


        Press "Spacebar" to continue
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Retrival
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ThankYou
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text = Thank You for participating!
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Flow
  Routine Instruction_1
  Routine Encoding
  Routine Break
  Routine Instruction_2
  Routine Retrival
  Routine ThankYou
